---
API: 2.1
OpenSesame: 3.3.4a5
Platform: posix
---
set width 1440
set uniform_coordinates yes
set title "Go-No/Go Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 900
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "/home/daniel/Documents"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background grey

define loop AudioOnly_Nofeedback
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound HighPitch
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound HighPitch
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 sound HighPitch
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 sound HighPitch
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 sound HighPitch
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 sound HighPitch
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 sound HighPitch
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 sound HighPitch
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 sound HighPitch
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 sound HighPitch
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 sound LowPitch
	setcycle 14 correct_response none
	setcycle 14 soa 0
	setcycle 15 sound LowPitch
	setcycle 15 correct_response none
	setcycle 15 soa 0
	setcycle 16 sound LowPitch
	setcycle 16 correct_response none
	setcycle 16 soa 0
	setcycle 17 sound LowPitch
	setcycle 17 correct_response none
	setcycle 17 soa 0
	setcycle 18 sound LowPitch
	setcycle 18 correct_response none
	setcycle 18 soa 0
	setcycle 19 sound LowPitch
	setcycle 19 correct_response none
	setcycle 19 soa 0
	run trial_sequence_AudioOnly_NoFeedback

define loop AudioOnly_feedback
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound LowPitch
	setcycle 1 correct_response none
	setcycle 1 soa 0
	run trial_sequence_AudioOnly_feedback

define loop Audio_IrreleventVisual_2_Feedback
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 visual_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound LowPitch
	setcycle 1 visual_color "#3841b1"
	setcycle 1 correct_response none
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 visual_color "#9a322f"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound LowPitch
	setcycle 3 visual_color "#9a322f"
	setcycle 3 correct_response none
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 visual_color gray
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound LowPitch
	setcycle 5 visual_color gray
	setcycle 5 correct_response none
	setcycle 5 soa 0
	run trial_sequence_IrreleventVis_Feedback_1

define loop Audio_IrreleventVisual_No_feedback_1
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 visual_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound HighPitch
	setcycle 1 visual_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 visual_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 visual_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 visual_color "#9a322f"
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound HighPitch
	setcycle 5 visual_color "#9a322f"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 sound HighPitch
	setcycle 6 visual_color "#9a322f"
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 sound HighPitch
	setcycle 7 visual_color "#9a322f"
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 sound HighPitch
	setcycle 8 visual_color "#9a322f"
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 sound HighPitch
	setcycle 9 visual_color "#9a322f"
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 sound HighPitch
	setcycle 10 visual_color gray
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 sound HighPitch
	setcycle 11 visual_color gray
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 sound HighPitch
	setcycle 12 visual_color gray
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 sound HighPitch
	setcycle 13 visual_color gray
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 sound LowPitch
	setcycle 14 visual_color "#9a322f"
	setcycle 14 correct_response none
	setcycle 14 soa 0
	setcycle 15 sound LowPitch
	setcycle 15 visual_color "#9a322f"
	setcycle 15 correct_response none
	setcycle 15 soa 0
	setcycle 16 sound LowPitch
	setcycle 16 visual_color "#3841b1"
	setcycle 16 correct_response none
	setcycle 16 soa 0
	setcycle 17 sound LowPitch
	setcycle 17 visual_color "#3841b1"
	setcycle 17 correct_response none
	setcycle 17 soa 0
	setcycle 18 sound LowPitch
	setcycle 18 visual_color gray
	setcycle 18 correct_response none
	setcycle 18 soa 0
	setcycle 19 sound LowPitch
	setcycle 19 visual_color gray
	setcycle 19 correct_response none
	setcycle 19 soa 0
	run trial_sequence_irreleventVis_NF

define loop Audio_IrreleventVisual_No_feedback_1_1
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 visual_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound HighPitch
	setcycle 1 visual_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 visual_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 visual_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 visual_color "#9a322f"
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound HighPitch
	setcycle 5 visual_color "#9a322f"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 sound HighPitch
	setcycle 6 visual_color "#9a322f"
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 sound HighPitch
	setcycle 7 visual_color "#9a322f"
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 sound HighPitch
	setcycle 8 visual_color "#9a322f"
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 sound HighPitch
	setcycle 9 visual_color "#9a322f"
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 sound HighPitch
	setcycle 10 visual_color gray
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 sound HighPitch
	setcycle 11 visual_color gray
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 sound HighPitch
	setcycle 12 visual_color gray
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 sound HighPitch
	setcycle 13 visual_color gray
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 sound LowPitch
	setcycle 14 visual_color "#9a322f"
	setcycle 14 correct_response none
	setcycle 14 soa 0
	setcycle 15 sound LowPitch
	setcycle 15 visual_color "#9a322f"
	setcycle 15 correct_response none
	setcycle 15 soa 0
	setcycle 16 sound LowPitch
	setcycle 16 visual_color "#3841b1"
	setcycle 16 correct_response none
	setcycle 16 soa 0
	setcycle 17 sound LowPitch
	setcycle 17 visual_color "#3841b1"
	setcycle 17 correct_response none
	setcycle 17 soa 0
	setcycle 18 sound LowPitch
	setcycle 18 visual_color gray
	setcycle 18 correct_response none
	setcycle 18 soa 0
	setcycle 19 sound LowPitch
	setcycle 19 visual_color gray
	setcycle 19 correct_response none
	setcycle 19 soa 0
	run trial_sequence_irreleventVis_NF_1

define loop Audio_IrreleventVisual_feedback
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 visual_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound LowPitch
	setcycle 1 visual_color "#3841b1"
	setcycle 1 correct_response none
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 visual_color "#9a322f"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound LowPitch
	setcycle 3 visual_color "#9a322f"
	setcycle 3 correct_response none
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 visual_color gray
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound LowPitch
	setcycle 5 visual_color gray
	setcycle 5 correct_response none
	setcycle 5 soa 0
	run trial_sequence_IrreleventVis_Feedback

define loop Audio_ReleventVisual_NoFeedback
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 40
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 visual_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound HighPitch
	setcycle 1 visual_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 visual_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 visual_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 visual_color "#3841b1"
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound HighPitch
	setcycle 5 visual_color "#3841b1"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 sound HighPitch
	setcycle 6 visual_color "#3841b1"
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 sound HighPitch
	setcycle 7 visual_color "#3841b1"
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 sound HighPitch
	setcycle 8 visual_color "#3841b1"
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 sound HighPitch
	setcycle 9 visual_color "#3841b1"
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 sound HighPitch
	setcycle 10 visual_color "#3841b1"
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 sound HighPitch
	setcycle 11 visual_color "#3841b1"
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 sound HighPitch
	setcycle 12 visual_color "#3841b1"
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 sound HighPitch
	setcycle 13 visual_color "#3841b1"
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 sound HighPitch
	setcycle 14 visual_color gray
	setcycle 14 correct_response space
	setcycle 14 soa 0
	setcycle 15 sound HighPitch
	setcycle 15 visual_color gray
	setcycle 15 correct_response space
	setcycle 15 soa 0
	setcycle 16 sound HighPitch
	setcycle 16 visual_color gray
	setcycle 16 correct_response space
	setcycle 16 soa 0
	setcycle 17 sound HighPitch
	setcycle 17 visual_color gray
	setcycle 17 correct_response space
	setcycle 17 soa 0
	setcycle 18 sound HighPitch
	setcycle 18 visual_color gray
	setcycle 18 correct_response space
	setcycle 18 soa 0
	setcycle 19 sound HighPitch
	setcycle 19 visual_color gray
	setcycle 19 correct_response space
	setcycle 19 soa 0
	setcycle 20 sound HighPitch
	setcycle 20 visual_color gray
	setcycle 20 correct_response space
	setcycle 20 soa 0
	setcycle 21 sound HighPitch
	setcycle 21 visual_color gray
	setcycle 21 correct_response space
	setcycle 21 soa 0
	setcycle 22 sound HighPitch
	setcycle 22 visual_color gray
	setcycle 22 correct_response space
	setcycle 22 soa 0
	setcycle 23 sound HighPitch
	setcycle 23 visual_color gray
	setcycle 23 correct_response space
	setcycle 23 soa 0
	setcycle 24 sound HighPitch
	setcycle 24 visual_color gray
	setcycle 24 correct_response space
	setcycle 24 soa 0
	setcycle 25 sound HighPitch
	setcycle 25 visual_color gray
	setcycle 25 correct_response space
	setcycle 25 soa 0
	setcycle 26 sound HighPitch
	setcycle 26 visual_color gray
	setcycle 26 correct_response space
	setcycle 26 soa 0
	setcycle 27 sound HighPitch
	setcycle 27 visual_color gray
	setcycle 27 correct_response space
	setcycle 27 soa 0
	setcycle 28 sound HighPitch
	setcycle 28 visual_color "#9a322f"
	setcycle 28 correct_response none
	setcycle 28 soa 0
	setcycle 29 sound HighPitch
	setcycle 29 visual_color "#9a322f"
	setcycle 29 correct_response none
	setcycle 29 soa 0
	setcycle 30 sound LowPitch
	setcycle 30 visual_color "#3841b1"
	setcycle 30 correct_response none
	setcycle 30 soa 0
	setcycle 31 sound LowPitch
	setcycle 31 visual_color "#3841b1"
	setcycle 31 correct_response none
	setcycle 31 soa 0
	setcycle 32 sound LowPitch
	setcycle 32 visual_color "#3841b1"
	setcycle 32 correct_response none
	setcycle 32 soa 0
	setcycle 33 sound LowPitch
	setcycle 33 visual_color "#3841b1"
	setcycle 33 correct_response none
	setcycle 33 soa 0
	setcycle 34 sound LowPitch
	setcycle 34 visual_color "#3841b1"
	setcycle 34 correct_response none
	setcycle 34 soa 0
	setcycle 35 sound LowPitch
	setcycle 35 visual_color "#3841b1"
	setcycle 35 correct_response none
	setcycle 35 soa 0
	setcycle 36 sound LowPitch
	setcycle 36 visual_color "#9a322f"
	setcycle 36 correct_response none
	setcycle 36 soa 0
	setcycle 37 sound LowPitch
	setcycle 37 visual_color "#9a322f"
	setcycle 37 correct_response none
	setcycle 37 soa 0
	setcycle 38 sound LowPitch
	setcycle 38 visual_color gray
	setcycle 38 correct_response none
	setcycle 38 soa 0
	setcycle 39 sound LowPitch
	setcycle 39 visual_color gray
	setcycle 39 correct_response none
	setcycle 39 soa 0
	run trial_sequence_ReleventVis_NF_1

define loop Audio_RreleventVisual_feedback
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 visual_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 1 sound LowPitch
	setcycle 1 visual_color "#3841b1"
	setcycle 1 correct_response none
	setcycle 2 sound HighPitch
	setcycle 2 visual_color "#9a322f"
	setcycle 2 correct_response none
	setcycle 3 sound LowPitch
	setcycle 3 visual_color "#9a322f"
	setcycle 3 correct_response none
	setcycle 4 sound HighPitch
	setcycle 4 visual_color gray
	setcycle 4 correct_response space
	setcycle 5 sound LowPitch
	setcycle 5 visual_color gray
	setcycle 5 correct_response none
	run trial_sequence_ReleventVis_Feedback

define loop AuditoryBlock
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run auditoryBlock_sequence

define sketchpad Consent_form_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Go/No-Go experiment<br /><br />Researchers: Ghazaleh Mahzouni and Nick Davidenko PhD. <br /><br /><br />This study is being conducted to gain more knowledge about the cognitive <br /><br />processes involved in attentional control. <br /><br />The experiment involves one session lasting approximately 30 minutes. <br /><br />There is no risk for participating in this study beyond those associated with <br /><br />computer use. <br /><br />Although it will not directly benefit you, this study will advance basic <br /><br />science on the cognitive processes involved in attentional control. <br /><br />Your participation is voluntary.<br /><br /> <br /><br /><br /><br />" x=-264 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="If you have understood this, please<br /><br /> confirm by pressing the key K. <br />" x=-1 y=256 z_index=0

define sketchpad Cue_blue_circle_1_1_1_3_1
	set duration keypress
	set description "Displays stimuli"
	draw circle color="#3841b1" fill=1 penwidth=1 r=143.10835055998655 show_if=always x=-296 y=84 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=55 html=yes show_if=always text="<br />" x=11 y=-258 z_index=0
	draw circle color="#9a322f" fill=1 penwidth=1 r=143 show_if=always x=200 y=84 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="" x=-213 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="Don't press <br />anything<br />" x=160 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="If you see a blue circle the space bar on your keyboard<br /><br />If you see a red circle, DO NOT press any keys <br /><br /><br />" x=-64 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="press any key to continue" x=-32 y=288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="press the spacebar" x=-288 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] =='odd'" text="Round 1 of 8" x=-32 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] =='even'" text="Round 5 of 8" x=-32 y=-320 z_index=0

define sketchpad TheEnd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=35 html=yes show_if=always text="You finshed the experiment! <br /><br /><br />Thank you for participating. <br /><br /><br />" x=0 y=96 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=35 html=yes show_if=always text="<br />" x=32 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text="" x=-32 y=-320 z_index=0

define loop VisualBlock
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run visualBlock_sequence_1

define loop VisualOnly_feedback_2_1
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 1 target_color "#9a322f"
	setcycle 1 correct_response none
	run trial_sequence_VisualOnly_1

define loop VisualOnly_nofeedback_1
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 1 target_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 2 target_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 3 target_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 4 target_color "#3841b1"
	setcycle 4 correct_response space
	setcycle 5 target_color "#3841b1"
	setcycle 5 correct_response space
	setcycle 6 target_color "#3841b1"
	setcycle 6 correct_response space
	setcycle 7 target_color "#3841b1"
	setcycle 7 correct_response space
	setcycle 8 target_color "#3841b1"
	setcycle 8 correct_response space
	setcycle 9 target_color "#3841b1"
	setcycle 9 correct_response space
	setcycle 10 target_color "#3841b1"
	setcycle 10 correct_response space
	setcycle 11 target_color "#3841b1"
	setcycle 11 correct_response space
	setcycle 12 target_color "#3841b1"
	setcycle 12 correct_response space
	setcycle 13 target_color "#3841b1"
	setcycle 13 correct_response space
	setcycle 14 target_color "#3841b1"
	setcycle 14 correct_response space
	setcycle 15 target_color "#3841b1"
	setcycle 15 correct_response space
	setcycle 16 target_color "#3841b1"
	setcycle 16 correct_response space
	setcycle 17 target_color "#3841b1"
	setcycle 17 correct_response space
	setcycle 18 target_color "#3841b1"
	setcycle 18 correct_response space
	setcycle 19 target_color "#3841b1"
	setcycle 19 correct_response space
	setcycle 20 target_color "#3841b1"
	setcycle 20 correct_response space
	setcycle 21 target_color "#9a322f"
	setcycle 21 correct_response none
	setcycle 22 target_color "#9a322f"
	setcycle 22 correct_response none
	setcycle 23 target_color "#9a322f"
	setcycle 23 correct_response none
	setcycle 24 target_color "#9a322f"
	setcycle 24 correct_response none
	setcycle 25 target_color "#9a322f"
	setcycle 25 correct_response none
	setcycle 26 target_color "#9a322f"
	setcycle 26 correct_response none
	setcycle 27 target_color "#9a322f"
	setcycle 27 correct_response none
	setcycle 28 target_color "#9a322f"
	setcycle 28 correct_response none
	setcycle 29 target_color "#9a322f"
	setcycle 29 correct_response none
	run trial_sequence_visualOnly_3_1

define loop Visual_IrreleventSound2_Feedback_1
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound LowPitch
	setcycle 1 target_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound No_sound
	setcycle 2 target_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 target_color "#9a322f"
	setcycle 3 correct_response none
	setcycle 3 soa 0
	setcycle 4 sound LowPitch
	setcycle 4 target_color "#9a322f"
	setcycle 4 correct_response none
	setcycle 4 soa 0
	setcycle 5 sound No_sound
	setcycle 5 target_color "#9a322f"
	setcycle 5 correct_response none
	setcycle 5 soa 0
	run trial_sequence_ireleventSound2_1_1

define loop Visual_IrreleventSound2_NoFeedback_1
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound HighPitch
	setcycle 1 target_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 target_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 target_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 target_color "#3841b1"
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound HighPitch
	setcycle 5 target_color "#3841b1"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 sound LowPitch
	setcycle 6 target_color "#3841b1"
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 sound LowPitch
	setcycle 7 target_color "#3841b1"
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 sound LowPitch
	setcycle 8 target_color "#3841b1"
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 sound LowPitch
	setcycle 9 target_color "#3841b1"
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 sound LowPitch
	setcycle 10 target_color "#3841b1"
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 sound LowPitch
	setcycle 11 target_color "#3841b1"
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 sound LowPitch
	setcycle 12 target_color "#3841b1"
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 sound LowPitch
	setcycle 13 target_color "#3841b1"
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 sound LowPitch
	setcycle 14 target_color "#3841b1"
	setcycle 14 correct_response space
	setcycle 14 soa 0
	setcycle 15 sound No_sound
	setcycle 15 target_color "#3841b1"
	setcycle 15 correct_response space
	setcycle 15 soa 0
	setcycle 16 sound No_sound
	setcycle 16 target_color "#3841b1"
	setcycle 16 correct_response space
	setcycle 16 soa 0
	setcycle 17 sound No_sound
	setcycle 17 target_color "#3841b1"
	setcycle 17 correct_response space
	setcycle 17 soa 0
	setcycle 18 sound No_sound
	setcycle 18 target_color "#3841b1"
	setcycle 18 correct_response space
	setcycle 18 soa 0
	setcycle 19 sound No_sound
	setcycle 19 target_color "#3841b1"
	setcycle 19 correct_response space
	setcycle 19 soa 0
	setcycle 20 sound No_sound
	setcycle 20 target_color "#3841b1"
	setcycle 20 correct_response space
	setcycle 20 soa 0
	setcycle 21 sound HighPitch
	setcycle 21 target_color "#9a322f"
	setcycle 21 correct_response none
	setcycle 21 soa 0
	setcycle 22 sound HighPitch
	setcycle 22 target_color "#9a322f"
	setcycle 22 correct_response none
	setcycle 22 soa 0
	setcycle 23 sound HighPitch
	setcycle 23 target_color "#9a322f"
	setcycle 23 correct_response none
	setcycle 23 soa 0
	setcycle 24 sound LowPitch
	setcycle 24 target_color "#9a322f"
	setcycle 24 correct_response none
	setcycle 24 soa 0
	setcycle 25 sound LowPitch
	setcycle 25 target_color "#9a322f"
	setcycle 25 correct_response none
	setcycle 25 soa 0
	setcycle 26 sound LowPitch
	setcycle 26 target_color "#9a322f"
	setcycle 26 correct_response none
	setcycle 26 soa 0
	setcycle 27 sound No_sound
	setcycle 27 target_color "#9a322f"
	setcycle 27 correct_response none
	setcycle 27 soa 0
	setcycle 28 sound No_sound
	setcycle 28 target_color "#9a322f"
	setcycle 28 correct_response none
	setcycle 28 soa 0
	setcycle 29 sound No_sound
	setcycle 29 target_color "#9a322f"
	setcycle 29 correct_response none
	setcycle 29 soa 0
	run trial_sequence_ireleventSound2_1_2_1

define loop Visual_IrreleventSound_Nofeedback_1_1
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 sound HighPitch
	setcycle 1 target_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 sound HighPitch
	setcycle 2 target_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 sound HighPitch
	setcycle 3 target_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 sound HighPitch
	setcycle 4 target_color "#3841b1"
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 sound HighPitch
	setcycle 5 target_color "#3841b1"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 sound LowPitch
	setcycle 6 target_color "#3841b1"
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 sound LowPitch
	setcycle 7 target_color "#3841b1"
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 sound LowPitch
	setcycle 8 target_color "#3841b1"
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 sound LowPitch
	setcycle 9 target_color "#3841b1"
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 sound LowPitch
	setcycle 10 target_color "#3841b1"
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 sound LowPitch
	setcycle 11 target_color "#3841b1"
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 sound LowPitch
	setcycle 12 target_color "#3841b1"
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 sound LowPitch
	setcycle 13 target_color "#3841b1"
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 sound LowPitch
	setcycle 14 target_color "#3841b1"
	setcycle 14 correct_response space
	setcycle 14 soa 0
	setcycle 15 sound No_sound
	setcycle 15 target_color "#3841b1"
	setcycle 15 correct_response space
	setcycle 15 soa 0
	setcycle 16 sound No_sound
	setcycle 16 target_color "#3841b1"
	setcycle 16 correct_response space
	setcycle 16 soa 0
	setcycle 17 sound No_sound
	setcycle 17 target_color "#3841b1"
	setcycle 17 correct_response space
	setcycle 17 soa 0
	setcycle 18 sound No_sound
	setcycle 18 target_color "#3841b1"
	setcycle 18 correct_response space
	setcycle 18 soa 0
	setcycle 19 sound No_sound
	setcycle 19 target_color "#3841b1"
	setcycle 19 correct_response space
	setcycle 19 soa 0
	setcycle 20 sound No_sound
	setcycle 20 target_color "#3841b1"
	setcycle 20 correct_response space
	setcycle 20 soa 0
	setcycle 21 sound HighPitch
	setcycle 21 target_color "#9a322f"
	setcycle 21 correct_response none
	setcycle 21 soa 0
	setcycle 22 sound HighPitch
	setcycle 22 target_color "#9a322f"
	setcycle 22 correct_response none
	setcycle 22 soa 0
	setcycle 23 sound HighPitch
	setcycle 23 target_color "#9a322f"
	setcycle 23 correct_response none
	setcycle 23 soa 0
	setcycle 24 sound LowPitch
	setcycle 24 target_color "#9a322f"
	setcycle 24 correct_response none
	setcycle 24 soa 0
	setcycle 25 sound LowPitch
	setcycle 25 target_color "#9a322f"
	setcycle 25 correct_response none
	setcycle 25 soa 0
	setcycle 26 sound LowPitch
	setcycle 26 target_color "#9a322f"
	setcycle 26 correct_response none
	setcycle 26 soa 0
	setcycle 27 sound No_sound
	setcycle 27 target_color "#9a322f"
	setcycle 27 correct_response none
	setcycle 27 soa 0
	setcycle 28 sound No_sound
	setcycle 28 target_color "#9a322f"
	setcycle 28 correct_response none
	setcycle 28 soa 0
	setcycle 29 sound No_sound
	setcycle 29 target_color "#9a322f"
	setcycle 29 correct_response none
	setcycle 29 soa 0
	run trial_sequence_1_2_1_1

define loop Visual_IrreleventSound_feedback_1
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound HighPitch
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 50
	setcycle 1 sound LowPitch
	setcycle 1 target_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 50
	setcycle 2 sound No_sound
	setcycle 2 target_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 50
	setcycle 3 sound HighPitch
	setcycle 3 target_color "#9a322f"
	setcycle 3 correct_response none
	setcycle 3 soa 50
	setcycle 4 sound LowPitch
	setcycle 4 target_color "#9a322f"
	setcycle 4 correct_response none
	setcycle 4 soa 50
	setcycle 5 sound No_sound
	setcycle 5 target_color "#9a322f"
	setcycle 5 correct_response none
	setcycle 5 soa 50
	run trial_sequence_1_2_2

define loop Visual_ReleventSound_Feedback_1
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_sound HighPitch
	setcycle 0 target_color "#9a322f"
	setcycle 0 correct_response none
	setcycle 0 soa 0
	setcycle 1 target_sound LowPitch
	setcycle 1 target_color "#9a322f"
	setcycle 1 correct_response none
	setcycle 1 soa 0
	setcycle 2 target_sound No_sound
	setcycle 2 target_color "#9a322f"
	setcycle 2 correct_response none
	setcycle 2 soa 0
	setcycle 3 target_sound HighPitch
	setcycle 3 target_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 target_sound LowPitch
	setcycle 4 target_color "#3841b1"
	setcycle 4 correct_response none
	setcycle 4 soa 0
	setcycle 5 target_sound No_sound
	setcycle 5 target_color "#3841b1"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	run trial_sequence_ReleventSound_1_2

define loop Visual_ReleventSound_NoFeedback_1
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 40
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_sound HighPitch
	setcycle 0 target_color "#3841b1"
	setcycle 0 correct_response space
	setcycle 0 soa 0
	setcycle 1 target_sound HighPitch
	setcycle 1 target_color "#3841b1"
	setcycle 1 correct_response space
	setcycle 1 soa 0
	setcycle 2 target_sound HighPitch
	setcycle 2 target_color "#3841b1"
	setcycle 2 correct_response space
	setcycle 2 soa 0
	setcycle 3 target_sound HighPitch
	setcycle 3 target_color "#3841b1"
	setcycle 3 correct_response space
	setcycle 3 soa 0
	setcycle 4 target_sound HighPitch
	setcycle 4 target_color "#3841b1"
	setcycle 4 correct_response space
	setcycle 4 soa 0
	setcycle 5 target_sound HighPitch
	setcycle 5 target_color "#3841b1"
	setcycle 5 correct_response space
	setcycle 5 soa 0
	setcycle 6 target_sound HighPitch
	setcycle 6 target_color "#3841b1"
	setcycle 6 correct_response space
	setcycle 6 soa 0
	setcycle 7 target_sound HighPitch
	setcycle 7 target_color "#3841b1"
	setcycle 7 correct_response space
	setcycle 7 soa 0
	setcycle 8 target_sound HighPitch
	setcycle 8 target_color "#3841b1"
	setcycle 8 correct_response space
	setcycle 8 soa 0
	setcycle 9 target_sound HighPitch
	setcycle 9 target_color "#3841b1"
	setcycle 9 correct_response space
	setcycle 9 soa 0
	setcycle 10 target_sound HighPitch
	setcycle 10 target_color "#3841b1"
	setcycle 10 correct_response space
	setcycle 10 soa 0
	setcycle 11 target_sound HighPitch
	setcycle 11 target_color "#3841b1"
	setcycle 11 correct_response space
	setcycle 11 soa 0
	setcycle 12 target_sound HighPitch
	setcycle 12 target_color "#3841b1"
	setcycle 12 correct_response space
	setcycle 12 soa 0
	setcycle 13 target_sound HighPitch
	setcycle 13 target_color "#3841b1"
	setcycle 13 correct_response space
	setcycle 13 soa 0
	setcycle 14 target_sound No_sound
	setcycle 14 target_color "#3841b1"
	setcycle 14 correct_response space
	setcycle 14 soa 0
	setcycle 15 target_sound No_sound
	setcycle 15 target_color "#3841b1"
	setcycle 15 correct_response space
	setcycle 15 soa 0
	setcycle 16 target_sound No_sound
	setcycle 16 target_color "#3841b1"
	setcycle 16 correct_response space
	setcycle 16 soa 0
	setcycle 17 target_sound No_sound
	setcycle 17 target_color "#3841b1"
	setcycle 17 correct_response space
	setcycle 17 soa 0
	setcycle 18 target_sound No_sound
	setcycle 18 target_color "#3841b1"
	setcycle 18 correct_response space
	setcycle 18 soa 0
	setcycle 19 target_sound No_sound
	setcycle 19 target_color "#3841b1"
	setcycle 19 correct_response space
	setcycle 19 soa 0
	setcycle 20 target_sound No_sound
	setcycle 20 target_color "#3841b1"
	setcycle 20 correct_response space
	setcycle 20 soa 0
	setcycle 21 target_sound No_sound
	setcycle 21 target_color "#3841b1"
	setcycle 21 correct_response space
	setcycle 21 soa 0
	setcycle 22 target_sound No_sound
	setcycle 22 target_color "#3841b1"
	setcycle 22 correct_response space
	setcycle 22 soa 0
	setcycle 23 target_sound No_sound
	setcycle 23 target_color "#3841b1"
	setcycle 23 correct_response space
	setcycle 23 soa 0
	setcycle 24 target_sound No_sound
	setcycle 24 target_color "#3841b1"
	setcycle 24 correct_response space
	setcycle 24 soa 0
	setcycle 25 target_sound No_sound
	setcycle 25 target_color "#3841b1"
	setcycle 25 correct_response space
	setcycle 25 soa 0
	setcycle 26 target_sound No_sound
	setcycle 26 target_color "#3841b1"
	setcycle 26 correct_response space
	setcycle 26 soa 0
	setcycle 27 target_sound No_sound
	setcycle 27 target_color "#3841b1"
	setcycle 27 correct_response space
	setcycle 27 soa 0
	setcycle 28 target_sound LowPitch
	setcycle 28 target_color "#3841b1"
	setcycle 28 correct_response none
	setcycle 28 soa 0
	setcycle 29 target_sound LowPitch
	setcycle 29 target_color "#3841b1"
	setcycle 29 correct_response none
	setcycle 29 soa 0
	setcycle 30 target_sound LowPitch
	setcycle 30 target_color "#3841b1"
	setcycle 30 correct_response none
	setcycle 30 soa 0
	setcycle 31 target_sound LowPitch
	setcycle 31 target_color "#3841b1"
	setcycle 31 correct_response none
	setcycle 31 soa 0
	setcycle 32 target_sound LowPitch
	setcycle 32 target_color "#3841b1"
	setcycle 32 correct_response none
	setcycle 32 soa 0
	setcycle 33 target_sound LowPitch
	setcycle 33 target_color "#3841b1"
	setcycle 33 correct_response none
	setcycle 33 soa 0
	setcycle 34 target_sound HighPitch
	setcycle 34 target_color "#9a322f"
	setcycle 34 correct_response none
	setcycle 34 soa 0
	setcycle 35 target_sound HighPitch
	setcycle 35 target_color "#9a322f"
	setcycle 35 correct_response none
	setcycle 35 soa 0
	setcycle 36 target_sound LowPitch
	setcycle 36 target_color "#9a322f"
	setcycle 36 correct_response none
	setcycle 36 soa 0
	setcycle 37 target_sound LowPitch
	setcycle 37 target_color "#9a322f"
	setcycle 37 correct_response none
	setcycle 37 soa 0
	setcycle 38 target_sound No_sound
	setcycle 38 target_color "#9a322f"
	setcycle 38 correct_response none
	setcycle 38 soa 0
	setcycle 39 target_sound No_sound
	setcycle 39 target_color "#9a322f"
	setcycle 39 correct_response none
	setcycle 39 soa 0
	run trial_sequence_ReleventSound_1_1_1

define sequence auditoryBlock_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback_5_2 always
	run cue_introduction_2_1 always
	run AudioOnly_feedback always
	run new_feedback always
	run instructions_4 always
	run AudioOnly_Nofeedback always
	run new_feedback_1 always
	run instruction always
	run Audio_IrreleventVisual_feedback always
	run new_feedback_1_1 always
	run instructions_1 always
	run Audio_IrreleventVisual_No_feedback_1 always
	run new_feedback_1_1_1 always
	run instructions_Audio_RelVis always
	run Audio_RreleventVisual_feedback always
	run new_feedback_1_1_1_1 always
	run instructions_Audio_RelVis_1 always
	run Audio_ReleventVisual_NoFeedback always
	run new_feedback_1_1_1_1_2 always
	run instructions_2 always
	run Audio_IrreleventVisual_2_Feedback always
	run new_feedback_1_1_1_1_2_1 always
	run instructions_3 always
	run Audio_IrreleventVisual_No_feedback_1_1 always
	run new_feedback_2 always

define sketchpad circle
	set duration 0
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_1
	set duration 650
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_1_1_1
	set duration 650
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2
	set duration 0
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_1
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_10
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_11
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_12
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_13
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_14
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_2
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_3
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_4
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_5
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_6
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_7
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_8
	set duration 650
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_1_1_9
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_2
	set duration 0
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_2_3
	set duration 0
	set description "Displays stimuli"
	draw circle color="[target_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_3
	set duration 650
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_4
	set duration 0
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_5
	set duration 650
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_6
	set duration 0
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_7
	set duration 650
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_8
	set duration 0
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad circle_9
	set duration 650
	set description "Displays stimuli"
	draw circle color="[visual_color]" fill=1 penwidth=1 r=143 show_if=always x=0 y=0 z_index=0

define sketchpad correct_1_1_2_1_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_1_2_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_2_2_1_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_2_2_1_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_2_2_1_2_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_2_2_1_2_1_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_2_2_1_2_1_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define sketchpad correct_1_2_2_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color="#21ff06" font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Correct!<br />" x=32 y=32 z_index=0

define inline_javascript counterbalancing
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	if(vars.subject_parity === "even"){
	    vars.condition1 = "AuditoryBlock"
	    vars.condition2 = "VisualBlock"
	}else {
	    vars.condition1 = "VisualBlock"
	    vars.condition2 = "AuditoryBlock"
	}
	    
	console.log(vars.subject_parity)
	console.log(vars.condition1)
	console.log(vars.condition2)
	__end__

define sketchpad cue_introduction_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="On each trial you will some hear sounds. <br /><br />Press the spacebar if you hear a high pitch sound. <br /><br />Do not press anything if you hear a low pitch sound! <br /><br />You should try to respond as quickly and as accurately as possible. <br /><br />Your keyboard respond will only be recorded <br /><br />if you press the spacebar within 650 ms of sound. <br /><br /><br /><br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="press any key to continue<br />" x=32 y=256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text="" x=-32 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 5 of 8" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 1 of 8" x=0 y=-288 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Consent_form_2 always
	run new_keyboard_consent_1 always
	run welcome1 always
	run mouse_welcome always
	run introduction1 always
	run keyboard_introduction always
	run introduction2 always
	run keyboard_intro2 always
	run counterbalancing always
	run experimental_loop always
	run TheEnd always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition "[condition1]"
	setcycle 1 practice ""
	setcycle 1 condition "[condition2]"
	run new_sequence

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_1_1
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_1_3_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3_1
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3_1_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3_1_1_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3_1_2
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3_1_2_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_3_1_3
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_1_3_1_1_4
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1_2_1_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=1

define sketchpad fixation_1_1_2_2
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=1

define sketchpad fixation_1_2_2_1_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_2_2_2
	set duration 950
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_6_1
	set duration 700
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_2
	set duration 650
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad incorrect_1_1_2_1_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_1_2_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_2_2_1_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_2_2_1_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_2_2_1_2_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_2_2_1_2_1_1
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_2_2_1_2_1_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad incorrect_1_2_2_2
	set duration 450
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Incorrect!<br />" x=0 y=32 z_index=0

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Ignore the circles. <br /><br />Press the space bar if you hear a high pitch tone. <br /><br />Don't press anything if you hear a low pitch tone. <br /><br />You should try to respond as quickly and as accurately as possible. <br /><br /><br />Press any key to continue<br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 6 of 8" x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 2 of 8" x=0 y=-224 z_index=0

define sketchpad instruction_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="For the next set of trials please ignore any sounds! <br /><br />press the space bar if you see a blue circle. <br /><br />DO NOT press anything if you see a red circle. <br /><br /><br />Press any key to continue!<br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 4 of 8" x=0 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 8 of 8" x=0 y=-192 z_index=0

define sketchpad instruction_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="On some trials you may hear a sound. Please ignore the sounds! <br /><br /><br />press the space bar if you see a blue circle. <br /><br />DO NOT press anything if you see a red circle. <br /><br /><br /><br />Press any key to continue!<br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 2 of 8" x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 6 of 8" x=0 y=-224 z_index=0

define sketchpad instruction_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="For the next set of trials, you will not receive feedback, but <br /><br />the instructions are the same. <br /><br />Press the space bar if you see a blue circle<br /><br />DO NOT press anything for red circle. <br /><br />Try to respond as quickly and accurately as possible. <br /><br />Your keyboard response will only be recorded if you respond <br /><br />within the 650 ms of the seeing the circle.<br />" x=0 y=0 z_index=0

define sketchpad instruction_relevent_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=25 html=yes show_if=always text="<br />Press the spacebar if you see a blue circle, UNLESS, you hear a low pitch tone. <br /><br /><br />If you hear a low pitch tone, DO NOT press anything. <br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 3 of 8" x=-64 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 7 of 8" x=-64 y=-192 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="You will not receive feedback anymore, but the instructions are the same. <br /><br />Ignore the sounds!<br /><br />Press the space bar if you see blue circle. <br /><br />DO NOT press anything for red circle. <br /><br /><br />Press any key to continue!<br /><br /><br />" x=0 y=0 z_index=0

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="<br />You will not recieve feedback anymore,but the instructions are the same. <br /><br /> Ignore the circles. <br /><br />Only press the space bar when you hear a high pitch tone. <br /><br />DO NOT press anything if you hear a low pitch tone. <br /><br />You should try to respond as quickly and as accurately as possible. <br /><br /><br /><br />Press any key to continue<br />" x=0 y=0 z_index=0

define sketchpad instructions_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="You will not recieve feedback anymore, but the instructions are the same. <br /><br /><br />Press the spacebar if you see a blue circle, UNLESS, you hear a low pitch tone. <br /><br />If you hear a low pitch tone, DO NOT press anything. <br />" x=0 y=0 z_index=0

define sketchpad instructions_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Again Ignore the circles. <br /><br />Only press the space bar when you hear a high pitch tone. <br /><br />DO NOT press anything if you hear a low pitch tone. <br /><br />You should try to respond as quickly and as accurately as possible. <br /><br /><br /><br />Press any key to continue<br />" x=32 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 8 of 8" x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 4 of 8" x=0 y=-224 z_index=0

define sketchpad instructions_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="<br />You will not recieve feedback anymore,but the instructions are the same. <br /><br /> Ignore the circles. <br /><br />Only press the space bar when you hear a high pitch tone. <br /><br />DO NOT press anything if you hear a low pitch tone. <br /><br />You should try to respond as quickly and as accurately as possible. <br /><br /><br /><br />Press any key to continue<br />" x=0 y=0 z_index=0

define sketchpad instructions_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="For the next set of trials, you will not recieve any feedback, but the instructions are the same. <br /><br />Press the spacebar for high pitch<br /><br />DO NOT press anything for the low pitch<br /><br />You should try to respond as quickly and as accurately as possible. <br /><br />Your keyboard respond will only be recored if you press the space bar within 650 ms of sound. <br /><br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad instructions_Audio_RelVis
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Press the spacebar if you hear a high pitch tone, UNLESS you see a red circle <br /><br />If you see a red circle DO NOT press anything. <br /><br /><br /><br /><br />Press any key to continue<br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'odd'" text="Round 7 of 8" x=-32 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if="[subject_parity] == 'even'" text="Round 3 of 8" x=-32 y=-192 z_index=0

define sketchpad instructions_Audio_RelVis_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=25 html=yes show_if=always text="<br />You will not recieve feedback anymore, but the instructions are the same. <br /><br />Press the spacebar if you hear a high pitch tone, UNLESS, you see a red circle <br /><br />If you see a red circle DO NOT press anything. <br /><br /><br />Press any key to continue<br />" x=0 y=0 z_index=0

define sketchpad introduction1
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="You will complete 8 rounds of experiment. <br /><br />At the beginning of each round you will be given a set of <br /><br />instructions. Please read them carefully. <br /><br />You will make your response using the space bar on your <br /><br />keyboard. <br /><br /><br /><br /><br /><br />" x=-320 y=-224 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="Press the space bar to continue" x=-224 y=128 z_index=0

define sketchpad introduction2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=35 html=yes show_if=always text="<br /><br /><br />" x=32 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="Your keyboard response will only be counted if you respond <br /><br />within the first 650 milliseconds. First, we will practice a <br /><br />few trials.<br /><br /><br />Place your index finger on the space bar.<br /><br /><br />Press the space bar to start the practice!<br />" x=0 y=32 z_index=0

define keyboard_response keyboard_intro2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_introduction
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_AudioOnly_Feedback
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_AudioOnly_NF
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound2_1_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound2_1_2_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound_1_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound_2_Feedback
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound_2_NF
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound_NF
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound_feedback
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_IrreleventSound_nofeedbaack_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_ReleventSound_1_1_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_ReleventSound_1_2
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_ReleventSound_Feedback
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_ReleventSound_NF
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_VisualOnly_2_1_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response keyboard_response_VisualOnly_feedback_1
	set timeout 650
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad lag
	set duration 450
	set description "Displays stimuli"

define sketchpad lag_1
	set duration 450
	set description "Displays stimuli"

define sketchpad lag_3_1
	set duration 450
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad lag_4_1
	set duration 450
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad lag_5_1
	set duration 450
	set description "Displays stimuli"

define sketchpad lag_6_1
	set duration 450
	set description "Displays stimuli"

define mouse_response mouse_welcome
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Your average response time was [avg_rt] ms <br /><br />Your accuracy was [acc] %<br /><br /><br /><br />Press any key to continue<br />" x=-32 y=0 z_index=0

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Your average response time was [avg_rt] ms <br /><br />Your accuracy was [acc] %<br /><br /><br /><br />Press any key to continue<br />" x=-32 y=0 z_index=0

define feedback new_feedback_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Your average response time was [avg_rt] ms <br /><br />Your accuracy was [acc] %<br /><br /><br /><br />Press any key to continue<br />" x=-32 y=0 z_index=0

define feedback new_feedback_1_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Your average response time was [avg_rt] ms <br /><br />Your accuracy was [acc] %<br /><br /><br /><br />Press any key to continue<br />" x=-32 y=0 z_index=0

define feedback new_feedback_1_1_1_1
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
define feedback new_feedback_1_1_1_1_2
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
define feedback new_feedback_1_1_1_1_2_1
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
define feedback new_feedback_1_1_3_1_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=34 html=yes show_if=always text="Your average response time was [avg_rt] ms<br /><br /><br />Your accuracy was [acc]%<br /><br /><br />Press any key to continue!" x=-32 y=0 z_index=0

define feedback new_feedback_1_1_3_1_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=34 html=yes show_if=always text="Your average response time was [avg_rt] ms<br /><br /><br />Your accuracy was [acc]%<br /><br /><br />Press any key to continue!" x=-32 y=0 z_index=0

define feedback new_feedback_1_1_3_1_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=34 html=yes show_if=always text="Your average response time was [avg_rt] ms<br /><br /><br />Your accuracy was [acc]%<br /><br /><br />Press any key to continue!" x=-32 y=0 z_index=0

define feedback new_feedback_1_1_3_1_4_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=34 html=yes show_if=always text="Your average response time was [avg_rt] ms<br /><br /><br />Your accuracy was [acc]%<br /><br /><br />Press any key to continue!" x=-32 y=0 z_index=0

define feedback new_feedback_1_1_3_1_5_1
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
define feedback new_feedback_1_1_3_1_6_1
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
define feedback new_feedback_1_1_3_2
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
define feedback new_feedback_1_6_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=34 html=yes show_if=always text="Your average response time was [avg_rt] ms<br /><br /><br />Your accuracy was [acc]%<br /><br /><br /><br />Press any key to continue<br />" x=0 y=0 z_index=0

define feedback new_feedback_2
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
define keyboard_response new_keyboard_consent_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses k

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_1_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_1_2
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_1_3_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3_1_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3_1_1_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3_1_2
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3_1_2_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_1_3_1_3
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_2_1_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_1_2_2
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1_5_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_2_2_1_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_2_2_2
	set description "Logs experimental data"
	set auto_log yes

define reset_feedback new_reset_feedback_1_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback new_reset_feedback_5_2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sampler new_sampler_2_2_1_1
	set volume 1
	set stop_after 0
	set sample "[target_sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_2_2_2
	set volume 1
	set stop_after 0
	set sample "[target_sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_1_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_1_2
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_1_3_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3_1_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3_1_1_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3_1_2
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3_1_2_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_1_3_1_3
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_2_1_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sampler new_sampler_4_2_2
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "[soa]"
	set description "Plays a sound file in .wav or .ogg format"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run VisualBlock "[condition] = VisualBlock"
	run AuditoryBlock "[condition] = AuditoryBlock"

define sketchpad new_sketchpad_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=25 html=yes show_if=always text="For the next set of tirals you will not recieve feedback, but the instructions are the same. <br /><br />Ignore any sounds!<br /><br />Press the space bar if you see blue circle. <br /><br />DO NOT press anything for red circle. <br /><br /><br />Press any key to continue!<br />" x=0 y=32 z_index=0

define sketchpad sketchpad
	set duration 650
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sequence trial_sequence_1_2_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_2_1_1 always
	run new_sampler_4_2_1_1 always
	run circle_2_1_1_5 always
	run keyboard_response_IrreleventSound_nofeedbaack_1 always
	run circle_2_1_1_6 always
	run lag_4_1 always
	run new_logger_1_1_2_1_1 always

define sequence trial_sequence_1_2_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_2_2 always
	run new_sampler_4_2_2 always
	run circle_2_1_1_3 always
	run keyboard_response_IrreleventSound_1_1 always
	run circle_2_1_1_4 always
	run incorrect_1_1_2_2 "[correct] = 0"
	run correct_1_1_2_2 "[correct] = 1"
	run new_logger_1_1_2_2 always

define sequence trial_sequence_AudioOnly_NoFeedback
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3 always
	run new_sampler_4_1_3 always
	run fixation_1_1_1_3_1_1_4 always
	run keyboard_response_AudioOnly_NF always
	run sketchpad always
	run lag always
	run new_logger_1_1_1_3 always

define sequence trial_sequence_AudioOnly_feedback
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1 always
	run new_sampler_4_1_1_2 always
	run fixation always
	run keyboard_response_AudioOnly_Feedback always
	run fixation_2 always
	run incorrect_1_2_2_1_2 "[correct] = 0"
	run correct_1_2_2_1_2 "[correct] = 1"
	run new_logger_1_1_1_1_2 always

define sequence trial_sequence_IrreleventVis_Feedback
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3_1 always
	run new_sampler_4_1_3_1 always
	run circle_2 always
	run keyboard_response_IrreleventSound_feedback always
	run circle_7 always
	run incorrect_1_2_2_1_2_1 "[correct] = 0"
	run correct_1_2_2_1_2_1 "[correct] = 1"
	run new_logger_1_1_1_3_1 always

define sequence trial_sequence_IrreleventVis_Feedback_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3_1_3 always
	run new_sampler_4_1_3_1_3 always
	run circle_8 always
	run keyboard_response_IrreleventSound_2_Feedback always
	run circle_9 always
	run incorrect_1_2_2_1_2_1_2 "[correct] = 0"
	run correct_1_2_2_1_2_1_2 "[correct] = 1"
	run new_logger_1_1_1_3_1_3 always

define sequence trial_sequence_ReleventSound_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_2_2_1_1 always
	run new_sampler_2_2_1_1 always
	run circle_2_1_1_9 always
	run keyboard_response_ReleventSound_1_1_1 always
	run circle_2_1_1_10 always
	run lag_5_1 always
	run new_logger_2_2_1_1 always

define sequence trial_sequence_ReleventSound_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_2_2_2 always
	run new_sampler_2_2_2 always
	run circle_2_1_1_7 always
	run keyboard_response_ReleventSound_1_2 always
	run circle_2_1_1_8 always
	run incorrect_1_2_2_2 "[correct] = 0"
	run correct_1_2_2_2 "[correct] = 1"
	run new_logger_2_2_2 always

define sequence trial_sequence_ReleventVis_Feedback
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3_1_2 always
	run new_sampler_4_1_3_1_2 always
	run circle_2_2 always
	run keyboard_response_ReleventSound_Feedback always
	run circle_3 always
	run incorrect_1_2_2_1_2_1_1 "[correct] = 0"
	run correct_1_2_2_1_2_1_1 "[correct] = 1"
	run new_logger_1_1_1_3_1_2 always

define sequence trial_sequence_ReleventVis_NF_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3_1_2_1 always
	run new_sampler_4_1_3_1_2_1 always
	run circle_4 always
	run keyboard_response_ReleventSound_NF always
	run circle_5 always
	run lag_1 always
	run new_logger_1_1_1_3_1_2_1 always

define sequence trial_sequence_VisualOnly_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1 always
	run circle_2_3 always
	run keyboard_response_VisualOnly_feedback_1 always
	run circle_2_1_1 always
	run correct_1_1_2_1_1 "[correct] = 1"
	run incorrect_1_1_2_1_1 "[correct] = 0"
	run new_logger_1 always

define sequence trial_sequence_ireleventSound2_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_1_1 always
	run new_sampler_4_1_1_1 always
	run circle_2_1_1_11 always
	run keyboard_response_IrreleventSound2_1_1 always
	run circle_2_1_1_12 always
	run correct_1_2_2_1_1 "[correct] = 1"
	run incorrect_1_2_2_1_1 "[correct] = 0"
	run new_logger_1_1_1_1_1 always

define sequence trial_sequence_ireleventSound2_1_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_1_3_1 always
	run new_sampler_4_1_1_3_1 always
	run circle_2_1_1_13 always
	run keyboard_response_IrreleventSound2_1_2_1 always
	run circle_2_1_1_14 always
	run lag_6_1 always
	run new_logger_1_1_1_1_3_1 always

define sequence trial_sequence_irreleventVis_NF
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3_1_1 always
	run new_sampler_4_1_3_1_1 always
	run circle always
	run keyboard_response_IrreleventSound_NF always
	run circle_1 always
	run new_logger_1_1_1_3_1_1 always

define sequence trial_sequence_irreleventVis_NF_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_1_1_3_1_1_3_1_1_1 always
	run new_sampler_4_1_3_1_1_1 always
	run circle_6 always
	run keyboard_response_IrreleventSound_2_NF always
	run circle_1_1_1 always
	run new_logger_1_1_1_3_1_1_1 always

define sequence trial_sequence_visualOnly_3_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_1_6_1 always
	run circle_2_1_1_1 always
	run keyboard_response_VisualOnly_2_1_1 always
	run circle_2_1_1_2 always
	run lag_3_1 always
	run new_logger_1_5_1 always

define sequence visualBlock_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback_1_1 always
	run Cue_blue_circle_1_1_1_3_1 always
	run VisualOnly_feedback_2_1 always
	run new_feedback_1_6_1 always
	run instruction_2 always
	run VisualOnly_nofeedback_1 always
	run new_feedback_1_1_3_1_2_1 always
	run instruction_1_2 always
	run Visual_IrreleventSound_feedback_1 always
	run new_feedback_1_1_3_1_3_1 always
	run instructions always
	run Visual_IrreleventSound_Nofeedback_1_1 always
	run new_feedback_1_1_3_1_4_1 always
	run instruction_relevent_1 always
	run Visual_ReleventSound_Feedback_1 always
	run new_feedback_1_1_3_1_5_1 always
	run instructions_1_1 always
	run Visual_ReleventSound_NoFeedback_1 always
	run new_feedback_1_1_3_1_6_1 always
	run instruction_1_1_1 always
	run Visual_IrreleventSound2_Feedback_1 always
	run new_feedback_1_1_3_1_1 always
	run new_sketchpad_1_1_1 always
	run Visual_IrreleventSound2_NoFeedback_1 always
	run new_feedback_1_1_3_2 always

define sketchpad welcome1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=35 html=yes show_if=always text="Welcome to the Go/No-Go experiment<br /><br /><br /><br /><br />click to continue!" x=0 y=0 z_index=0

