---
API: 2.1
OpenSesame: 3.3.4a1
Platform: posix
---
set width 1600
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 900
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/daniel/Documents"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sequence A1_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run click always
	run click_r always
	run click_r_c always

define sketchpad A2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="We raden je aan om deze taak te doen met<br />een koptelefoon op in een rustige ruimte,<br />zodat je geen last hebt van eventuele<br />achtergrondgeluiden.<br /><br /><br /><br /><br />Zorg ervoor dat je de spreker luid en duidelijk kunt verstaan." x=0 y=-224 z_index=0
	draw image center=1 file="luidspreker.png" scale=0.7000000000000001 show_if=always x=0 y=240 z_index=0

define sequence A2_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run A2 always
	run test_file always

define sketchpad A3
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=36 html=yes show_if=always text="Je had net de tijd om je instellingen<br />aan te passen, zodat je de spreker<br />goed kunt verstaan.<br /><br />Is dat gelukt? Klik dan op de pijl<br />rechtsonderin om verder te gaan.<br /><br />Is het nog niet gelukt? Klik dan op<br />de gedraaide pijl linksonderin om nog <br />een keer te luisteren naar de testopname." x=16 y=-128 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.4999999999999996 arrow_head_width=63 color=black fill=0 penwidth=2 show_if=always x1=480 x2=736 y1=352 y2=352 z_index=0
	draw image center=1 file="arrow.png" scale=0.30000000000000016 show_if=always x=-672 y=352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=36 html=yes show_if=always text="Nog een keer luisteren" x=-608 y=256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=36 html=yes show_if=always text="Verder gaan" x=608 y=256 z_index=0

define mouse_response A3_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_javascript A3_r_c
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (400 < vars.cursor_x && 320 < vars.cursor_y){
	    vars.AUD3_break = 1
	    vars.AUD_break = 1
	}else if (-400 > vars.cursor_x && 200 < vars.cursor_y){
	    vars.AUD3_break = 1
	    vars.AUD_break = 0
	}
	__end__
	set _prepare ""

define sequence A3_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run A3 always
	run A3_r always
	run A3_r_c always

define loop AUD1_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[AUD1_break]==1"
	setcycle 0 empty_column ""
	run A1_seq

define loop AUD2_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run A2_seq

define loop AUD3_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[AUD3_break]==1"
	setcycle 0 empty_column ""
	run A3_seq

define loop AUD_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[AUD_break]==1"
	setcycle 0 empty_column ""
	run AUD_seq

define sequence AUD_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fix_audio_lopos always
	run AUD1_loop always
	run AUD2_loop always
	run AUD3_loop always

define inline_javascript BREAK_T
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.correct_training == 3){
	    vars.T_break = 1
	}else if (vars.wrong == 2){
	    vars.T_kick = 1
	    vars.IN2_break = 1
	    vars.EX_break = 1
	}
	__end__
	set _prepare ""

define sequence C_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run context always
	run context_r always
	run context_r_c_1 always

define sequence C_seq_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run context_1 always
	run context_r_1 always
	run context_r_c_1_1 always

define loop EX_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 C1 "De docente had een tijdje geleden gehoord"
	setcycle 0 C10 "   "
	setcycle 0 C11 "   "
	setcycle 0 C12 "   "
	setcycle 0 C2 "dat één van haar leerlingen drugsverslaafd was"
	setcycle 0 C3 "Maar toen ze het laatste nieuws hoorde,"
	setcycle 0 C4 "was ze stomverbaasd."
	setcycle 0 C5 "   "
	setcycle 0 C6 "   "
	setcycle 0 C7 "   "
	setcycle 0 C8 "   "
	setcycle 0 C9 "   "
	setcycle 0 Condition filler
	setcycle 0 Item 1
	setcycle 1 C1 "Als de telefoon van mijn vrouw 's avonds gaat,"
	setcycle 1 C10 "   "
	setcycle 1 C11 "   "
	setcycle 1 C12 "   "
	setcycle 1 C2 "is het altijd familie die belt."
	setcycle 1 C3 "  "
	setcycle 1 C4 "   "
	setcycle 1 C5 "   "
	setcycle 1 C6 "   "
	setcycle 1 C7 "   "
	setcycle 1 C8 "   "
	setcycle 1 C9 "   "
	setcycle 1 Condition filler
	setcycle 1 Item 2
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	setcycle 9 C1 "Mijn zoon en neefjes gingen naar het meer"
	setcycle 9 C10 "   "
	setcycle 9 C11 ""
	setcycle 9 C12 "   "
	setcycle 9 C2 "voor een verfrissende duik."
	setcycle 9 C3 "   "
	setcycle 9 C4 "   "
	setcycle 9 C5 ""
	setcycle 9 C6 "   "
	setcycle 9 C7 ""
	setcycle 9 C8 "   "
	setcycle 9 C9 "   "
	setcycle 9 Condition filler
	setcycle 9 Item 10
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	setcycle 12 C1 "Ik wilde vorige week al een afspraak met Marie maken, "
	setcycle 12 C10 "en donderdag, maar Marie kon niet op één van die dagen. "
	setcycle 12 C11 "Ik weet alleen niet meer welke."
	setcycle 12 C12 "    "
	setcycle 12 C2 "maar ik heb haar niet meteen gebeld. Ondertussen kan ik"
	setcycle 12 C3 "nog maar op dinsdag en donderdag. Maar toen ik haar net "
	setcycle 12 C4 "belde bleek dat het niet meer gaat lukken deze week. "
	setcycle 12 C5 "   "
	setcycle 12 C6 "   "
	setcycle 12 C7 "Ik heb vorige week een afspraak met Marie gemaakt maar"
	setcycle 12 C8 "ik heb het niet meteen in mijn agenda geschreven. Nu weet ik"
	setcycle 12 C9 "niet meer precies op welke dag we uitgekomen waren. Ik kon dinsdag"
	setcycle 12 Condition experimental
	setcycle 12 Item 13
	setcycle 13 C1 "Voor lage rugpijn raden dokters aan om regelmatig tenminste"
	setcycle 13 C10 "nogal verschillende types mensen gedaan. Ik vraag me af hoe"
	setcycle 13 C11 "dat gaat als deze twee sporten allebei samen voorgeschreven"
	setcycle 13 C12 "worden ter behandeling van rugpijn."
	setcycle 13 C2 "één sport te doen die de rugspieren versterkt, zoals yoga en"
	setcycle 13 C3 "zwemmen. Maar deze sporten zijn niet erg populair onder veel"
	setcycle 13 C4 "oudere patiënten. Het zou daarom handig zijn als dokters nog"
	setcycle 13 C5 "een derde sport zouden voorstellen ter behandeling van rugpijn."
	setcycle 13 C6 "   "
	setcycle 13 C7 "Voor lage rugpijn raden dokters aan om regelmatig yoga te "
	setcycle 13 C8 "doen en te zwemmen. Deze twee sporten versterken namelijk"
	setcycle 13 C9 "de rugspieren. Maar zwemmen en yoga worden meestal door"
	setcycle 13 Condition experimental
	setcycle 13 Item 14
	setcycle 14 C1 "Op de verjaardag van mijn zoon kregen de kinderen allemaal"
	setcycle 14 C10 "iedereen. Ik heb van beide maar wat extra zakjes gevuld. "
	setcycle 14 C11 "Kinderen zijn namelijk erg kieskeurig."
	setcycle 14 C12 "   "
	setcycle 14 C2 "een zakje met snoepjes mee als afscheidskado. Eerst hadden"
	setcycle 14 C3 "we ze alleen in rode en blauwe zakjes gestopt, maar ik heb ook"
	setcycle 14 C4 "maar een paar groene zakjes gevuld. Kinderen zijn namelijk"
	setcycle 14 C5 "erg kieskeurig"
	setcycle 14 C6 "   "
	setcycle 14 C7 "Op de verjaardag van mijn zoon kregen de kinderen allemaal"
	setcycle 14 C8 "een zakje met snoepjes mee als afscheidskado. Deze had mijn"
	setcycle 14 C9 "vrouw in rode en blauwe zakjes gestopt, precies genoeg voor"
	setcycle 14 Condition experimental
	setcycle 14 Item 15
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	setcycle 16 C1 "Jan is in de supermarkt voor zijn wekelijkse boodschappen."
	setcycle 16 C10 "komt, moet hij even hard nadenken, want er is één soort fruit waar"
	setcycle 16 C11 "zijn schoonzus allergisch voor is. Jan koopt gewoonlijk altijd"
	setcycle 16 C12 "appels en bananen. Maar nu twijfelt hij."
	setcycle 16 C2 "Zijn schoonzus komt dit weekend logeren, dus hij koopt wat"
	setcycle 16 C3 "meer boodschappen dan normaal. Jan koopt gewoonlijk altijd"
	setcycle 16 C4 "appels en bananen, maar hij weet dat zijn schoonzus een"
	setcycle 16 C5 "dubbele fruitallergie heeft."
	setcycle 16 C6 "   "
	setcycle 16 C7 "Jan is in de supermarkt voor zijn wekelijkse boodschappen."
	setcycle 16 C8 "Zijn schoonzus komt dit weekend logeren, dus hij koopt wat"
	setcycle 16 C9 "meer boodschappen dan normaal. Wanneer hij bij de fruitafdeling"
	setcycle 16 Condition experimental
	setcycle 16 Item 17
	setcycle 17 C1 "In de brugklas krijgen leerlingen nieuwe vakken: vreemde talen en"
	setcycle 17 C10 "profielen focussen op de exacte vakken, anderen meer op talen"
	setcycle 17 C11 "en cultuur. Dit zorgt ervoor dat meer leerlingen zullen slagen."
	setcycle 17 C12 "   "
	setcycle 17 C2 "exacte vakken. De middelbare school van mijn zoon wil een"
	setcycle 17 C3 "onderwijsvernieuwing invoeren waarbij er ook vakken als"
	setcycle 17 C4 "maatschappijleer en psychologie worden aangeboden."
	setcycle 17 C5 "Dan hebben meer leerlingen kans van slagen."
	setcycle 17 C6 "   "
	setcycle 17 C7 "In de onderbouw van de middelbare school volgen leerlingen"
	setcycle 17 C8 "allerlei nieuwe vakken: vreemde talen en exacte vakken. In de"
	setcycle 17 C9 "bovenbouw kiezen de leerlingen zelf hun vakkenpakket. Sommige"
	setcycle 17 Condition experimental
	setcycle 17 Item 18
	setcycle 18 C1 "De juf van groep acht is het jaarlijkse klassenuitje aan het"
	setcycle 18 C10 "ieder geval aan één activiteit meedoen, maar ze zijn niet verplicht om"
	setcycle 18 C11 "aan beide mee te doen. Er is al vaak gedoe van ouders geweest over"
	setcycle 18 C12 "het toezicht in zwembaden, of juist soms over de filmkeuze."
	setcycle 18 C2 "organiseren. Normaal gesproken gaan ze aan het einde van het"
	setcycle 18 C3 "schooljaar iets leuks doen, zoals naar de bioscoop en het zwembad."
	setcycle 18 C4 "Nu wil de juf graag ergens anders naartoe, zodat iedereen kans krijgt om"
	setcycle 18 C5 "mee te gaan. Er is namelijk altijd wel gedoe geweest van ouders"
	setcycle 18 C6 "over het toezicht in zwembaden en de filmkeuze.  "
	setcycle 18 C7 "De juf van groep acht is het jaarlijkse klassenuitje aan het"
	setcycle 18 C8 "organiseren om het einde van het schooljaar te vieren: eerst gaan ze"
	setcycle 18 C9 "naar de bioscoop en dan naar het zwembad. De kinderen moeten in"
	setcycle 18 Condition experimental
	setcycle 18 Item 19
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	setcycle 20 C1 "Sommige adoptiekinderen groeien op in een pleeggezin omdat"
	setcycle 20 C10 "van het kind. Maar vaak geven kinderen één van de ouders de"
	setcycle 20 C11 "schuld voor de situatie en wijzen het contact met die ouder af."
	setcycle 20 C12 "Ze willen dan niet op bezoek bij hun vader of hun moeder."
	setcycle 20 C2 "allebei hun ouders in de gevangenis zitten. Psychologen zeggen"
	setcycle 20 C3 "dat het contact met de ouders belangrijk is voor de ontwikkeling"
	setcycle 20 C4 "van het kind. Gelukkig willen de meesten dat wel. Maar er zijn"
	setcycle 20 C5 "kinderen die alle contact afwijzen. "
	setcycle 20 C6 "   "
	setcycle 20 C7 "Sommige adoptiekinderen groeien op in een pleeggezin omdat"
	setcycle 20 C8 "allebei hun ouders in de gevangenis zitten. Psychologen zeggen"
	setcycle 20 C9 "dat het contact met de ouders belangrijk is voor de ontwikkeling"
	setcycle 20 Condition experimental
	setcycle 20 Item 21
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	setcycle 23 C1 "Op de meeste middelbare scholen krijgen leerlingen Engels plus"
	setcycle 23 C10 "namelijk, Chinees en Russisch. Dit is echter geen verplichting;"
	setcycle 23 C11 "het is ook toegestaan om maar één extra taal te nemen."
	setcycle 23 C12 "Een aantal kinderen is daar heel blij mee. "
	setcycle 23 C2 "twee vreemde talen. Op deze taaltalent school moeten leerlingen"
	setcycle 23 C3 "behalve de bekende schooltalen een extra vreemde taal kiezen, zoals"
	setcycle 23 C4 "Chinees en Russisch. Maar dat zijn heel moeilijke talen. Daarom biedt"
	setcycle 23 C5 "de school sinds kort ook Spaans aan. Een aantal kinderen is daar"
	setcycle 23 C6 "heel blij mee."
	setcycle 23 C7 "Op de meeste middelbare scholen krijgen leerlingen Engels plus"
	setcycle 23 C8 "twee vreemde talen. Op deze taaltalent school wordt leerlingen"
	setcycle 23 C9 "aangeraden naast de bekende schooltalen twee extra talen kiezen,"
	setcycle 23 Condition experimental
	setcycle 23 Item 24
	run EX_seq

define sequence EX_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pre_trial_code always
	run ms100 always
	run context_loop_1 always
	run sound_loop_1 always
	run J_loop_1 always
	run post_trial_code always
	run logger always

define sketchpad IN
	set start_response_interval no
	set reset_variables no
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Je krijgt telkens eerst een<br />kort verhaaltje te lezen.<br />Het is aan jou de taak om dat verhaal<br />goed door te lezen, en vervolgens onderin het scherm<br />op het luidspreker-icoontje te klikken.<br />Vervolgens krijg je twéé audiofragmenten te horen<br />van een zin die twee keer wordt uitgesproken,<br />op twee verschillende manieren.<br />Deze zin volgt logisch op het <br />verhaal dat je daarvoor hebt gelezen.<br /><br />Jouw taak is om aan te geven welke van de<br />twee manieren van uitspreken jij het beste <br />vindt passen bij het gegeven verhaal.<br />Het doel is om hierbij zo snel en accuraat<br />mogelijk te zijn. <br />Volg dus je intuïtie.<br /><br />Let op: je krijgt elk audiofragment maar <br />ÉÉN keer te horen!<br /><br />We gaan eerst met een paar verhaaltjes<br />oefenen. Klik op de pijl<br />rechtsonderin om te starten." x=0 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.4999999999999996 arrow_head_width=63 color=black fill=0 penwidth=2 show_if=always x1=480 x2=736 y1=384 y2=384 z_index=0

define loop IN2_loop
	set source table
	set repeat 20
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[IN2_break] == 1"
	setcycle 0 empty_column ""
	run IN2_seq

define sequence IN2_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run IN_2 always
	run IN_r_1 always
	run IN_r_c_1 always

define sketchpad IN_2
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Goed gedaan!<br /><br />Je krijgt nu tussendoor telkens een update over de voortgang. <br /><br />Ter herinnering:<br />Het doel is om zo snel EN accuraat<br />mogelijk te antwoorden. <br />Volg dus je intuïtie.<br /><br />Let op: je krijgt elk audiofragment maar <br />ÉÉN keer te horen!<br /><br />Klik op de pijl<br />rechtsonderin om te starten." x=0 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.4999999999999996 arrow_head_width=63 color=black fill=0 penwidth=2 show_if=always x1=480 x2=736 y1=384 y2=384 z_index=0

define loop IN_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[IN_break]==1"
	setcycle 0 empty_column ""
	run IN_seq

define mouse_response IN_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad IN
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response IN_r_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_javascript IN_r_c
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (400 < vars.cursor_x && 300 < vars.cursor_y){
	    vars.IN_break = 1
	}else vars.IN_break = 0
	
	console.log(vars.IN_break)
	__end__
	set _prepare ""

define inline_javascript IN_r_c_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (400 < vars.cursor_x && 300 < vars.cursor_y){
	    vars.IN2_break = 1
	}else vars.IN2_break = 0
	__end__
	set _prepare ""

define sequence IN_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run IN always
	run IN_r always
	run IN_r_c always

define loop J_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[J_break] == 1"
	setcycle 0 empty_column ""
	run J_seq

define loop J_loop_1
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[J_break] == 1"
	setcycle 0 empty_column ""
	run J_seq_1

define sequence J_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run judgement always
	run judgement_r always
	run judgement_r_c always

define sequence J_seq_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run judgement_1 always
	run judgement_r_1 always
	run judgement_r_c_1 always

define loop T_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if "[T_break] == 1"
	setcycle 0 C1 "Een moeder was haar kind aan het voorlezen in een drukke,"
	setcycle 0 C2 "rumoerige trein. Het verhaal ging over Goudlokje en het huis"
	setcycle 0 C3 "van de drie beren. Toen de moeder vertelde dat Goudlokje"
	setcycle 0 C4 "in een van de bedden stapte, kwam er net een luid omroepbericht"
	setcycle 0 C5 "van de conducteur. Het kind wilde er zeker van zijn dat ze"
	setcycle 0 C6 "het goed had gehoord en vroeg:"
	setcycle 0 Item 1
	setcycle 0 condition Training
	setcycle 1 C1 "Het was een heerlijk zonnige dag, dus de familie ging zwemmen"
	setcycle 1 C2 "en picknicken bij het meer. Toen ze bij het meer aankwamen,"
	setcycle 1 C3 "deden ze allemaal hun zwemkleding aan en spreidden ze"
	setcycle 1 C4 "een kleed uit voor de picknickspullen. De jongste zoon"
	setcycle 1 C5 "wilde de picknickmand al opendoen. Maar de vader zei:"
	setcycle 1 C6 "    "
	setcycle 1 Item 2
	setcycle 1 condition Training
	setcycle 2 C1 "Jan en Rob waren een boodschappenlijst aan het opstellen"
	setcycle 2 C2 "voor een BBQ avond met vrienden. Jan zei dat hij de groep"
	setcycle 2 C3 "zou trakteren op een lekkere fles whisky, want hij was net"
	setcycle 2 C4 "jarig geweest. Rob begreep die opmerking niet, want de"
	setcycle 2 C5 "supermarkt waar ze naartoe zouden gaan, heeft geen"
	setcycle 2 C6 "vergunning voor sterke drank. Dus Rob vroeg:"
	setcycle 2 Item 3
	setcycle 2 condition Training
	setcycle 3 C1 "Een man en vrouw waren in het ziekenhuis voor de geboorte"
	setcycle 3 C2 "van hun eerste kind. Na een lange en pijnlijke bevalling pakte"
	setcycle 3 C3 "de kersverse vader de telefoon om zijn familie te bellen."
	setcycle 3 C4 "Toen zijn vader de telefoon opnam, vertelde hij hem vol trots:"
	setcycle 3 C5 "    "
	setcycle 3 C6 "    "
	setcycle 3 Item 4
	setcycle 3 condition Training
	run T_seq

define sequence T_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run randomisationprosody always
	run context_loop always
	run sound_loop always
	run J_loop always
	run training_c always
	run logger always
	run BREAK_T always

define sketchpad click
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="We raden je aan om deze taak te doen met<br />een koptelefoon op in een rustige ruimte,<br />zodat je geen last hebt van eventuele<br />achtergrondgeluiden.<br /><br />Klik op de luidspreker hieronder om<br />de geluidsopname af te spelen.<br /><br />Zorg ervoor dat je de spreker luid en duidelijk kunt verstaan." x=0 y=-224 z_index=0
	draw image center=1 file="luidspreker.png" scale=0.7000000000000001 show_if=always x=0 y=240 z_index=0

define mouse_response click_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_javascript click_r_c
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (-400 < vars.cursor_x && vars.cursor_x < 400 && 100 < vars.cursor_y){
	    vars.AUD1_break = 1
	}else vars.AUD1_break = 0
	__end__
	set _prepare ""

define sketchpad context
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[C1]<br />[C2]<br />[C3]<br />[C4]<br />[C5]<br />[C6]" x=-17 y=-199 z_index=0
	draw image center=1 file="luidspreker.png" scale=0.5000000000000001 show_if=always x=0 y=320 z_index=0

define sketchpad context_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[C1]<br />[C2]<br />[C3]<br />[C4]<br />[C5]<br />[C6]" x=-17 y=-199 z_index=0
	draw image center=1 file="luidspreker.png" scale=0.5000000000000001 show_if=always x=0 y=320 z_index=0

define loop context_loop
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[C_break] == 1"
	setcycle 0 empty_column ""
	run C_seq

define loop context_loop_1
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[C_break] == 1"
	setcycle 0 empty_column ""
	run C_seq_1

define mouse_response context_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response context_r_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_javascript context_r_c_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (-400 < vars.cursor_x && vars.cursor_x < 400 && 100 < vars.cursor_y){
	    vars.C_break = 1
	}else vars.C_break = 0
	__end__
	set _prepare ""

define inline_javascript context_r_c_1_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (-400 < vars.cursor_x && vars.cursor_x < 400 && 100 < vars.cursor_y){
	    vars.C_break = 1
	}else vars.C_break = 0
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run variables_fix always
	run AUD_loop never
	run logger "[IC] == 1"
	run IN_loop always
	run logger always
	run new_sketchpad always
	run T_loop "[IC] == 1"
	run IN2_loop "[IC] == 1"
	run pseudorandomisation_inclusive_exclusive "[IC] == 1"
	run EX_loop "[IC] == 1"
	run thanks_no_T "[T_kick]==1"
	run logger "[T_kick]==1"
	run thanks "[T_break]==1"
	run logger "[T_break]==1"

define inline_javascript fix_audio_lopos
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare ""

define sketchpad judgement
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Welke van de twee heeft jouw voorkeur?<br />Klik aan de linkerkant van het scherm op de <br />(1) als je de eerste beter vond klinken,<br />en druk op de (2) rechts als<br />jouw voorkeur uitgaat naar versie 2" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text="(2)" x=619 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text="(1)" x=-619 y=0 z_index=-1

define sketchpad judgement_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Welke van de twee heeft jouw voorkeur?<br />Klik aan de linkerkant van het scherm op de <br />(1) als je de eerste beter vond klinken,<br />en druk op de (2) rechts als<br />jouw voorkeur uitgaat naar versie 2" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text="(2)" x=619 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text="(1)" x=-619 y=0 z_index=-1

define mouse_response judgement_r
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response judgement_r_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define inline_javascript judgement_r_c
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.cursor_x < -350){
	    vars.pref = "1"
	    vars.J_break = 1
	}else if (350 < vars.cursor_x){
	    vars.pref = "2"
	    vars.J_break = 1
	}else vars.J_break = 0
	__end__
	set _prepare ""

define inline_javascript judgement_r_c_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.cursor_x < -350){
	    vars.pref = "1"
	    vars.J_break = 1
	}else if (350 < vars.cursor_x){
	    vars.pref = "2"
	    vars.J_break = 1
	}else vars.J_break = 0
	__end__
	set _prepare ""

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad ms100
	set duration 100
	set description "Displays stimuli"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=TEST x=0 y=0 z_index=0

define sketchpad onelargerthantwo
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="(2)" x=620 y=0 z_index=-1
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=194 html=yes show_if=always text="(1)" x=-620 y=0 z_index=-1

define sketchpad onelargerthantwo_1
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="(2)" x=620 y=0 z_index=-1
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=194 html=yes show_if=always text="(1)" x=-620 y=0 z_index=-1

define inline_javascript post_trial_code
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.pref == "1"){
	    if(vars.pros1 == "SUBJ"){
	        vars.prospref = "SUBJ"
	        if(vars.Item < 7){
	            vars.correct = 1
	            vars.expected = ""
	        }else{
	            vars.correct = 0
	            vars.expected = ""
	        }
	    }else if(vars.pros1 == "VERB"){
	        vars.prospref = "VERB"
	        if(vars.Item > 6){
	            vars.correct = 1
	            vars.expected = ""
	        }else{
	            vars.correct = 0
	            vars.expected = ""
	        }
	    }else if (vars.pros1 == "NEG"){
	        vars.prospref = "NEG"
	        if (vars.epros == "NEG"){
	            vars.expected = 1
	        }else vars.expected = 0
	    }else if (vars.pros1 == "OR"){
	        vars.prospref = "OR"
	        if (vars.epros == "OR"){
	            vars.expected = 1
	        }else vars.expected = 0
	    }
	}else if (vars.pref == "2"){
	    if(vars.pros2 == "SUBJ"){
	        if(vars.Item < 7){
	            vars.correct = 1
	            vars.expected = ""
	        }else{
	            vars.correct = 0
	            vars.expected = ""
	        }
	    }else if(vars.pros2 == "VERB"){
	        if(vars.Item > 6){
	            vars.correct = 1
	            vars.expected = ""
	        }else{
	            vars.correct = 0
	            vars.expected = ""
	        }
	    }else if (vars.pros2 == "NEG"){
	        vars.prospref = "NEG"
	        if (vars.epros == "NEG"){
	            vars.expected = 1
	        }else vars.expected = 0
	    }else if (vars.pros2 == "OR"){
	        vars.prospref = "OR"
	        if (vars.epros == "OR"){
	            vars.expected = 1
	        }else vars.expected = 0
	    }
	}
	vars.progress += 1
	__end__
	set _prepare ""

define inline_javascript pre_trial_code
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.C_break = 0
	vars.J_break = 0
	if (vars.Item == 1 || vars.Item == 2 || vars.Item == 3 || vars.Item == 4 || vars.Item == 5 || vars.Item == 6 || vars.Item == 7 || vars.Item == 8 || vars.Item == 9 || vars.Item == 10 || vars.Item == 11 || vars.Item == 12){
	    if((Math.round(Math.random())) == 1){
	        vars.pros1 = "SUBJ"
	        vars.pros2 = "VERB"
	    }else {
	        vars.pros1 = "VERB"
	        vars.pros2 = "SUBJ"
	    }
	}else if (vars.Item == 13 || vars.Item == 14 || vars.Item == 15 || vars.Item == 16 || vars.Item == 17 || vars.Item == 18 || vars.Item == 19 || vars.Item == 20 || vars.Item == 21 || vars.Item == 22 || vars.Item == 23 || vars.Item == 24){
	    if((Math.round(Math.random())) == 1){
	        vars.pros1 = "NEG"
	        vars.pros2 = "OR"
	    }else {
	        vars.pros1 = "OR"
	        vars.pros2 = "NEG"
	    }
	}
	
	
	if (vars.Item == 13){
	    if (vars.AB13 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 14){
	    if (vars.AB14 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 15){
	    if (vars.AB15 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 16){
	    if (vars.AB16 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 17){
	    if (vars.AB17 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 18){
	    if (vars.AB18 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 19){
	    if (vars.AB19 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 20){
	    if (vars.AB20 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 21){
	    if (vars.AB21 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 22){
	    if (vars.AB22 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 23){
	    if (vars.AB23 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	if (vars.Item == 24){
	    if (vars.AB24 == 1){
	        vars.C1 = vars.C7
	        vars.C2 = vars.C8
	        vars.C3 = vars.C9
	        vars.C4 = vars.C10
	        vars.C5 = vars.C11
	        vars.C6 = vars.C12
	        vars.epros = "OR"
	    }else vars.epros = "NEG"
	}
	__end__
	set _prepare ""

define inline_javascript pseudorandomisation_inclusive_exclusive
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	function produceSwitchList() {
	    // Constants.
	    var totalLength = 12;
	    var maxSameSequence = 2;
	
	    // Helpers.
	    function shuffle(arr)
	    {
	        for(var i = 0; i < arr.length; ++i)
	        {
	            var swapIndex = Math.floor(Math.random() * arr.length);
	            let temp = arr[i];
	            arr[i] = arr[swapIndex];
	            arr[swapIndex] = temp;
	        }
	    }
	
	    function conditionMet(arr)
	    {
	        // There should not be more than maxSameSequence of the same element (either 0 or 1) in a row.
	        var lastVal = -1;
	        var amountSame = 0;
	        for(var i = 0; i < arr.length; ++i)
	        {
	            if(arr[i] === lastVal)
	            {
	                ++amountSame;
	                if(amountSame > maxSameSequence)
	                {
	                    return false;
	                }
	            }
	            else
	            {
	                lastVal = arr[i];
	                amountSame = 1;
	            }
	        }
	
	        return true;
	    }
	
	    // Initialize. Unfortunately can't use ECMAScript 6 functions like Array.fill.
	    var subject = new Array(totalLength);
	    for(var i = 0; i < totalLength / 2; ++i)
	    {
	        subject[i] = 0;
	    }
	    for(var i = totalLength / 2; i < totalLength; ++i)
	    {
	        subject[i] = 1;
	    }
	
	    // Keep shuffling until the condition is met.
	    // With current parameters this takes about five linear-time shuffles on average.
	    do
	    {
	        shuffle(subject);
	    } while(!conditionMet(subject));
	
	    return subject;
	}
	
	vars.switchlist = produceSwitchList()
	vars.AB13 = vars.switchlist[0]
	vars.AB14 = vars.switchlist[1]
	vars.AB15 = vars.switchlist[2]
	vars.AB16 = vars.switchlist[3]
	vars.AB17 = vars.switchlist[4]
	vars.AB18 = vars.switchlist[5]
	vars.AB19 = vars.switchlist[6]
	vars.AB20 = vars.switchlist[7]
	vars.AB21 = vars.switchlist[8]
	vars.AB22 = vars.switchlist[9]
	vars.AB23 = vars.switchlist[10]
	vars.AB24 = vars.switchlist[11]
	__end__
	set _prepare ""

define inline_javascript randomisationprosody
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.C_break = 0
	vars.J_break = 0
	vars.trialorder = vars.trialorder + 1
	if((Math.floor(Math.random())) == 1){
	    vars.pros1 = "FD"
	    vars.pros2 = "FQ"
	}else{
	    vars.pros1 = "FQ"
	    vars.pros2 = "FD"
	}
	console.log('Randomizing')
	__end__

define sampler sentence_1
	set volume 1
	set stop_after 0
	set sample "[Item]-[pros1]-[lang].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler sentence_1_1
	set volume 1
	set stop_after 0
	set sample "[Item]-[pros1]-[lang].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler sentence_2
	set volume 1
	set stop_after 0
	set sample "[Item]-[pros2]-[lang].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler sentence_2_1
	set volume 1
	set stop_after 0
	set sample "[Item]-[pros2]-[lang].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define loop sound_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 empty_column ""
	run sound_sequence

define loop sound_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 empty_column ""
	run sound_sequence_1

define sequence sound_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run onelargerthantwo always
	run sentence_1 always
	run twolargerthanone always
	run sentence_2 always

define sequence sound_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run onelargerthantwo_1 always
	run sentence_1_1 always
	run twolargerthanone_1 always
	run sentence_2_1 always

define sampler test_file
	set volume 1
	set stop_after 0
	set sample "test-NL.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad thanks
	set duration 2500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="Bedankt voor het deelnemen!<br /><br />(Laat deze pagina aub open totdat <br />het experiment vanzelf afsluit)" x=0 y=0 z_index=0

define sketchpad thanks_no_T
	set duration 2500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Helaas had je teveel fouten bij de oefenopgaven. Bedankt voor het meedoen!" x=0 y=0 z_index=0

define inline_javascript training_c
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.pref == "1"){
	    if(vars.pros1 == "FD"){
	        if(vars.Item == 2 || vars.Item == 4){
	            vars.correct = 1
	            vars.correct_training = vars.correct_training + 1
	        }else{
	            vars.correct = 0
	            vars.wrong = vars.wrong + 1
	        }
	    }else if(vars.pros1 == "FQ"){
	        if(vars.Item == 1 || vars.Item == 3){
	            vars.correct = 1
	            vars.correct_training = vars.correct_training + 1
	        }else {
	            vars.correct = 0
	            vars.wrong = vars.wrong + 1
	        }
	    }
	}else if (vars.pref == "2"){
	    if(vars.pros2 == "FD"){
	        if(vars.Item == 2 || vars.Item == 4){
	            vars.correct = 1
	            vars.correct_training = vars.correct_training + 1
	        }else{
	            vars.correct = 0
	            vars.wrong = vars.wrong + 1
	        }
	    }else if(vars.pros2 == "FQ"){
	        if(vars.Item == 1 || vars.Item == 3){
	            vars.correct = 1
	            vars.correct_training = vars.correct_training + 1
	        }else {
	            vars.correct = 0
	            vars.wrong = vars.wrong + 1
	        }
	    }
	}
	__end__
	set _prepare ""

define sketchpad twolargerthanone
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=194 html=yes show_if=always text="(2)" x=620 y=0 z_index=-1
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="(1)" x=-620 y=0 z_index=-1

define sketchpad twolargerthanone_1
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=194 html=yes show_if=always text="(2)" x=620 y=0 z_index=-1
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="(1)" x=-620 y=0 z_index=-1

define inline_javascript variables_fix
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//This programme needs many custom variables to be declared early on. The variables listed below are used elsewhere in the experiment. Please do not alter any of these except for the variable "language", which you will need to rename to whatever you will use for the audio files (we used NL, which meant audio files were labeled 1-NEG-NL)
	vars.lang = "NL"
	vars.compensation = 'raffle'
	vars.IC = 1
	vars.AUD_break = 0
	vars.AUD1_break = 0
	vars.AUD3_break = 0
	vars.IN_break = 0
	vars.T_break = 0
	vars.IN2_break = 0
	vars.C_break = 0
	vars.J_break = 0
	vars.correct_training = 0
	vars.Item = ''
	vars.pros = ''
	vars.T_kick = 0
	__end__

