---
API: 3
Description: A template experiment for OpenMonkeyMind
OpenSesame: 4.1.9
Platform: posix
Title: OMM Template Experiment
---
set width 1024
set uniform_coordinates yes
set title "OMM Template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sebastiaan/git/omm-server/public/files/1"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background gray

define sequence empty_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run test_loop never
	run request_job always
	run trial_sequence always

define sketchpad fixdot
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="pupil-cat.jpg" scale=1 show_if=True x=0 y=0 z_index=1
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="job_var_a: {job_var_a}<br /><br /><br />Press any key" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define omm_request_job request_job
	set test_loop test_loop
	set overwrite no
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set job_index ""
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 10
	set block_select no
	set _run ""
	set _prepare ""

define omm_conditioner reward
	set stop E
	set start S
	set sound "do nothing"
	set serial_port "{var.get('omm_conditioner_port', 'COM4')}"
	set secondes 5
	set reward yes
	set motor_pause 200
	set motor_n_pulses 5
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition A
	setcycle 1 condition B
	run empty_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixdot always
	run logger always
	run reward always

