---
API: 2.1
OpenSesame: 3.2.8
Platform: nt
---
set width 1440
set uniform_coordinates yes
set title "EFFORT experiment"
set subject_parity even
set subject_nr 0
set start Experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_window_pos auto
set pygame_window_frame yes
set pygame_hwsurface yes
set osf_id 5e182ce7573419033f80b743
set mouse_backend legacy
set keyboard_backend legacy
set height 900
set fullscreen no
set form_clicks no
set foreground "#070707"
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/Users/Daniel/OneDrive/Cloud/ICTforScience/Projects/Madrid - Effort"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#7f7f7f"

define sketchpad AXBlueExample1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXBlueExample1.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXBlueExample1_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses l

define sketchpad AXBlueExample2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXBlueExample2.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXBlueExample2_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses s

define sketchpad AXBlueExample3
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXBlueExample3.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXBlueExample3_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses s

define sketchpad AXBlueExample4
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXBlueExample4.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXBlueExample4_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses s

define sketchpad AXOrangeExample1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXOrangeExample1.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXOrangeExample1_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses s

define sketchpad AXOrangeExample2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXOrangeExample2.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXOrangeExample2_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses l

define sketchpad AXOrangeExample3
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXOrangeExample3.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXOrangeExample3_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses l

define sketchpad AXOrangeExample4
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="AXOrangeExample4.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response AXOrangeExample4_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses l

define sketchpad AX_Blue_instructions
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="AXInstructions-Blue.png" scale=0.4 show_if=always x=0 y=0 z_index=0

define sketchpad AX_Cue
	set reset_variables no
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=75 html=yes show_if=always text="[Cue]" x=0 y=0 z_index=0

define feedback AX_Feedback
	set reset_variables no
	set duration 2000
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Tu velocidad de respuesta ha sido [response_time]ms." x=0 y=32 z_index=0
	draw textline center=1 color="#00ff00" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[correct] = 1" text="¡Correcto!" x=0 y=-32 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[correct] = 0" text="¡Incorrecto!" x=0 y=-32 z_index=0

define sketchpad AX_Fixation
	set duration 500
	set description "Muestra estímulos"
	draw fixdot color="#000000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad AX_Fixation_after
	set duration 0
	set description "Displays stimuli"
	draw fixdot color="#070707" show_if=always style=default x=0 y=0 z_index=0

define sketchpad AX_KB_instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="AX-Instructions1.png" scale=1 show_if=always x=0 y=64 z_index=0

define sketchpad AX_Orange_instructions
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="AXInstructions-Orange.png" scale=0.4 show_if=always x=0 y=0 z_index=0

define sequence AX_Practice_seq
	# Notes: Estimated Runtime: 25 minutes
	# Cycles: 20
	# Conditions per cycle: 10
	# Total letters seen: 1000
	# Distribution of Conditions: AX 70%; AY 10%; BX 10%; BY 10%
	# Sequences by Condition: AX 140; AY 20; BX 20; BY 20
	# Total letters by Condition: AX 700; AY 100; BX 100; BY 100
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Practice_Intro always
	run reset_feedback always
	run AX_Trials always
	run practice_feedback always

define sketchpad AX_Probe
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=75 html=yes show_if=always text="[Probe]" x=0 y=0 z_index=0

define keyboard_response AX_Probe_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "[AX_yes];[AX_no]"

define sequence AX_Task
	# berry.grant@gmail.com
	# Notes: Estimated Runtime: 25 minutes
	# Cycles: 20
	# Conditions per cycle: 10
	# Total letters seen: 1000
	# Distribution of Conditions: AX 70%; AY 10%; BX 10%; BY 10%
	# Sequences by Condition: AX 140; AY 20; BX 20; BY 20
	# Total letters by Condition: AX 700; AY 100; BX 100; BY 100
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run AX_task_instructions "[practice] = yes"
	run AX_practice always
	run AX_experiment always

define sequence AX_Task_examples
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Blue "[AX_yes] = l"
	run Orange "[AX_yes] = s"

define sequence AX_Trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run AX_Fixation always
	run AX_Cue always
	run AX_blank_after_cue always
	run AX_Probe always
	run AX_Probe_response always
	run AX_Feedback "[mode] = practice"
	run AX_Fixation_after always

define loop AX_Trials
	set source table
	set repeat 6
	set order random
	set item PracticeTrials
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set column_order "Condition;Cue;Probe;CorrectAnswer;Weight;ProbeAnswer"
	set break_if_on_first no
	set break_if "=(clock.time() - var.timer_start)/1000 > var.duration"
	setcycle 0 Weight 2
	setcycle 0 Probe X
	setcycle 0 Cue A
	setcycle 0 Condition AX
	setcycle 0 correct_response "[AX_yes]"
	setcycle 1 Weight 1
	setcycle 1 Probe X
	setcycle 1 Cue D
	setcycle 1 Condition BX
	setcycle 1 correct_response "[AX_no]"
	setcycle 2 Weight 1
	setcycle 2 Probe C
	setcycle 2 Cue A
	setcycle 2 Condition AY
	setcycle 2 correct_response "[AX_no]"
	setcycle 3 Weight 1
	setcycle 3 Probe R
	setcycle 3 Cue T
	setcycle 3 Condition BY
	setcycle 3 correct_response "[AX_no]"
	weight Weight
	run AX_Trial_sequence

define sketchpad AX_blank_after_cue
	set reset_variables no
	set duration 1200
	set description "Displays stimuli"

define loop AX_experiment
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 duration "[block_duration]"
	setcycle 0 round 1
	setcycle 0 mode experiment
	setcycle 1 duration "[block_duration]"
	setcycle 1 round 2
	setcycle 1 mode experiment
	run AX_task_sequence

define loop AX_practice
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 mode practice
	run AX_Practice_seq

define sequence AX_task_instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run AX_KB_instructions always
	run AX_Orange_instructions "[AX_yes] = s"
	run AX_Blue_instructions "[AX_yes] = l"
	run AX_Task_examples always

define sequence AX_task_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run AX_Trials always

define sketchpad Bienvenido
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#070707" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="¡Bienvenido!" x=0 y=0 z_index=0

define sequence Blue
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run AXBlueExample1 always
	run AXBlueExample1_pause always
	run AXBlueExample2 always
	run AXBlueExample2_pause always
	run AXBlueExample3 always
	run AXBlueExample3_pause always
	run AXBlueExample4 always
	run AXBlueExample4_pause always

define sequence Experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run SessionSettings always

define sketchpad Instructions_SimonTask
	set duration keypress
	set description "Muestra estímulos"
	draw image center=1 file="Simon-Instructions2.png" scale=0.4 show_if=always x=0 y=0 z_index=0

define sketchpad Intro_practice_simon
	set duration keypress
	set description "Muestra estímulos"
	draw textline center=1 color="#070707" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Vamos a practicar un poco." x=0 y=-160 z_index=0
	draw image center=1 file="AX-Instructions1.png" scale=1 show_if=always x=0 y=128 z_index=0

define sketchpad Keyboard_Instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Simon-Instructions1.png" scale=1 show_if=always x=-32 y=64 z_index=0

define sequence Orange
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run AXOrangeExample1 always
	run AXOrangeExample1_pause always
	run AXOrangeExample2 always
	run AXOrangeExample2_pause always
	run AXOrangeExample3 always
	run AXOrangeExample3_pause always
	run AXOrangeExample4 always
	run AXOrangeExample4_pause always

define sketchpad Practice_Intro
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#070707" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Vamos a practicar un poco." x=0 y=-160 z_index=0
	draw image center=1 file="AX-Instructions1.png" scale=1 show_if=always x=0 y=128 z_index=0

define sequence Procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Bienvenido always
	run Tasks always
	run end_screen always

define loop SessionSettings
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 AX_no s
	setcycle 0 AX_ratio 3
	setcycle 0 AX_yes l
	setcycle 0 block_duration 120
	setcycle 0 games_practice_duration 180
	setcycle 0 practice_duration 120
	setcycle 0 simon_ratio 1.5
	setcycle 0 slider_ratio 3
	setcycle 0 task1 simon
	setcycle 0 task2 AX
	run Procedure

define loop Simon_experiment
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 duration "[block_duration]"
	setcycle 0 round 1
	setcycle 0 mode experiment
	setcycle 1 duration "[block_duration]"
	setcycle 1 round 2
	setcycle 1 mode experiment
	run simon_task_sequence

define loop Simon_practice
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 mode practice
	run Simon_practice_seq

define sequence Simon_practice_seq
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run Intro_practice_simon always
	run reset_feedback always
	run simon_task_trials always
	run practice_feedback always

define sequence Simon_task
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run Simon_task_instructions "[practice] = yes"
	run Simon_practice "[practice] = yes"
	run Simon_experiment always

define sequence Simon_task_examples
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run Simontask_example1 always
	run Simontask_example1_pause always
	run Simontask_example2 always
	run Simontask_example2_pause always
	run Simontask_example3 always
	run Simontask_example3_pause always

define sequence Simon_task_instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Keyboard_Instructions always
	run Instructions_SimonTask always
	run Simon_task_examples always

define sketchpad Simontask_example1
	set duration 0
	set description "Muestra estímulos"
	draw image center=1 file="left-arrow.png" scale=1 show_if=always x=-512 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=always text=Pulsa x=0 y=96 z_index=0
	draw image center=1 file="ora.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define keyboard_response Simontask_example1_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses s

define sketchpad Simontask_example2
	set duration 0
	set description "Muestra estímulos"
	draw image center=1 file="left-arrow.png" scale=1 show_if=always x=480 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=always text=Pulsa x=0 y=96 z_index=0
	draw image center=1 file="ora.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define keyboard_response Simontask_example2_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses s

define sketchpad Simontask_example3
	set duration 0
	set description "Muestra estímulos"
	draw image center=1 file="right-arrow.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text=Pulsa x=0 y=96 z_index=0
	draw image center=1 file="blu.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define keyboard_response Simontask_example3_pause
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses l

define loop Tasks
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 task "[task1]"
	setcycle 0 phase "intrinsic motivation"
	setcycle 0 practice yes
	setcycle 0 skip no
	setcycle 1 task "[task1]"
	setcycle 1 phase "piece rate"
	setcycle 1 practice no
	setcycle 1 skip no
	setcycle 2 task "[task2]"
	setcycle 2 phase "piece rate"
	setcycle 2 practice yes
	setcycle 2 skip no
	setcycle 3 task "[task2]"
	setcycle 3 phase tournament
	setcycle 3 practice no
	setcycle 3 skip no
	run Tasks_sequence

define sequence Tasks_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Simon_task always
	run AX_Task always

define sketchpad blank
	set duration 500
	set description "Displays stimuli"

define feedback end_screen
	set reset_variables yes
	set duration keypress
	set description "Proporciona feedback al participante"
	draw textline center=1 color="#070707" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="¡Muchas gracias! Puedes recoger tus cosas." x=0 y=0 z_index=0

define feedback practice_feedback
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#070707" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Has terminado la ronda de práctica.<br />Si tienes alguna duda, levanta la mano para ser atendido.<br />Si no, espera las siguientes instrucciones." x=0 y=0 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define feedback simon_feedback_practice
	set reset_variables no
	set duration 2000
	set description "Proporciona feedback al participante"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Tu velocidad de respuesta ha sido [response_time] ms.<br /><br />" x=0 y=32 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[correct] =0" text="¡Incorrecto!" x=0 y=-32 z_index=0
	draw textline center=1 color="#00ff00" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[correct] = 1" text="¡Correcto!" x=0 y=-32 z_index=0

define sketchpad simon_fixation_dot_1
	set duration 1000
	set description "Muestra estímulos"
	draw fixdot color="#000000" show_if=always style=default x=0 y=0 z_index=0

define keyboard_response simon_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses "l;s"

define sketchpad simon_target
	set duration 0
	set description "Muestra estímulos"
	draw image center=1 file="[gaze_cue]-arrow.png" scale=1 show_if=always x="[target_pos]" y=0 z_index=0

define sequence simon_task_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run simon_fixation_dot_1 always
	run simon_task_trials always

define sequence simon_task_trial_sequence
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run simon_target always
	run simon_response always
	run simon_feedback_practice "[mode] = practice"
	run blank always

define loop simon_task_trials
	set source table
	set repeat 3
	set order random
	set description "Corre otro objeto de forma repetida"
	set cycles 6
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 gaze_cue right
	setcycle 0 target_pos 0
	setcycle 0 correct_response l
	setcycle 0 congruency neutral
	setcycle 1 gaze_cue left
	setcycle 1 target_pos 0
	setcycle 1 correct_response s
	setcycle 1 congruency neutral
	setcycle 2 gaze_cue right
	setcycle 2 target_pos 512
	setcycle 2 correct_response l
	setcycle 2 congruency congruent
	setcycle 3 gaze_cue left
	setcycle 3 target_pos 512
	setcycle 3 correct_response s
	setcycle 3 congruency incongruent
	setcycle 4 gaze_cue right
	setcycle 4 target_pos -512
	setcycle 4 correct_response l
	setcycle 4 congruency incongruent
	setcycle 5 gaze_cue left
	setcycle 5 target_pos -512
	setcycle 5 correct_response s
	setcycle 5 congruency congruent
	run simon_task_trial_sequence

